PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  expName = pm_sentences_ks16
  Units = pix
  Screen = 1
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Routines
  Routine end
    TextComponent text_2
      wrapWidth = 800
      text = Thank you very much for taking part
      startVal [time (s)] = 0.0
      letterHeight = 30
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start
    CodeComponent code
      Begin Routine:
        import random
        random.seed()
        if random.random() > .5:
            blockfile = "food.xlsx"
            blocktext = "food"
            grouptext = "f"
        else:
            blockfile = "vehicles.xlsx"
            blocktext = "vehicle"
            grouptext = "v"
        targetgap = 10
        targetjitter = 4
        fillernum = 0
        targetnum = 0
        NTrials = 90
        NTargets = 6

        puttarget = targetgap + random.randint(0,targetjitter)
    TextComponent text
      wrapWidth = 800
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        Please rate each sentence on a scale of 1-7, where 1 is very negative, 7 is very positive, and 4 is neutral.  Proceed as quickly and accurately as possible.

        Press the space bar to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pm_instructions
    TextComponent pm_text
      wrapWidth = 800
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text [set every repeat]:
        There is one more thing to do while you rate the sentences.

        Some of the sentences will be about $blocktext. Whenever you see a sentence about $blocktext, press the backslash key or the T key as well as rating it. Pressing backslash or T does not move on to the next sentence - you still give your 1-7 rating afterwards.

        Press the space bar to start the task
    KeyboardComponent key_pm_start
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine loadtargets
    CodeComponent code_4
      Begin Experiment:
        targetsentences = []
        targetratings = []
        targetvalence = []
      End Routine:
        targetsentences.append(Sentence)
        targetratings.append(Rating)
        targetvalence.append(Valence)
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent fixation
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.5
      letterHeight = 120
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    TextComponent sentence
      wrapWidth = 800
      text [set every repeat] = $Sentence
      startVal [time (s)] = 1
      letterHeight = 45
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    KeyboardComponent response
      forceEndRoutine = False
      allowedKeys = 'backslash', 't', '1', '2', '3', '4', '5', '6', '7'
      startVal [time (s)] = 1
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    TextComponent scale
      wrapWidth = 1000
      text = Negative 1 - 2 - 3 - 4 - 5 - 6 - 7 Positive
      pos = [0, -150]
      startVal [time (s)] = 1
      letterHeight = 30
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    CodeComponent code_2
      End Routine:
        thisExp.addData('Sentence', Sentence)
        thisExp.addData('Rating', Rating)
        thisExp.addData('Target', Target)
        thisExp.addData('Valence', Valence)
        thisExp.addData('Group', blocktext)

        if (trials.thisN) == NTrials-1:
            trials.finished = True
      Each Frame:
        if "backslash" in response.keys:
            continueRoutine = True
            if target_flag < 1:
                thisExp.addData('Target_RT', response.rt)
                target_flag = 1
        elif "t" in response.keys:
            continueRoutine = True
            if target_flag < 1:
                thisExp.addData('Target_RT', response.rt)
                target_flag = 1
        elif len(response.keys) > 0:
            continueRoutine = False
  Routine loadconditions
    CodeComponent code_3
      Begin Experiment:
        sentences = []
        ratings = []
      End Routine:
        sentences.append(Sentence)
        ratings.append(Rating)
  Routine pretrial
    CodeComponent code_5
      Begin Routine:
        if targetnum == NTargets:
            Sentence = sentences[fillernum]
            Rating = ratings[fillernum]
            Target = 0
            Valence = ""
            fillernum = fillernum + 1
        elif trials.thisN == puttarget:
            puttarget = puttarget + targetgap + random.randint(0,targetjitter)
            Sentence = targetsentences[targetnum]
            Rating = targetratings[targetnum]
            Valence = targetvalence[targetnum]
            targetnum = targetnum + 1
            Target = 1
        else:
            Sentence = sentences[fillernum]
            Rating = ratings[fillernum]
            fillernum = fillernum + 1
            Target = 0
            Valence = ""
        target_flag = 0
Flow
  Routine start
  Routine pm_instructions
  LoopInitiator fillers loopType="TrialHandler"
    conditionsFile = fillers.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{u'Rating': 2, u'Sentence': u'The poet was dying of aids.'},
      {u'Rating': 2, u'Sentence': u'They found the resident of the house handcuffed in a corner.'},
      {u'Rating': 2, u'Sentence': u'The pope was assassinated by the Mafia.'},
      {u'Rating': 2, u'Sentence': u'The prisoners beat up the detective.'},
      {u'Rating': 2.5, u'Sentence': u'They looked at the scan showing the tumour.'},
      {u'Rating': 2.5, u'Sentence': u'They went on a trip away and were kidnapped.'},
      {u'Rating': 2.5, u'Sentence': u'The painting was of a starving child.'},
      {u'Rating': 2.5, u'Sentence': u'The foam gathered around his rabid mouth.'},
      {u'Rating': 2.5, u'Sentence': u'The store was infested with rats and cockroaches.'},
      {u'Rating': 2.5, u'Sentence': u'When her last relative died she went to a home for orphans.'},
      {u'Rating': 2.5, u'Sentence': u'She never had a wash and smelt disgusting.'},
      {u'Rating': 3, u'Sentence': u'The smoke rose from the buildings into the night.'},
      {u'Rating': 3, u'Sentence': u'Household dust is formed of dead mites and lice.'},
      {u'Rating': 3, u'Sentence': u'He found that his favourite suit had been cut to shreds.'},
      {u'Rating': 3, u'Sentence': u'The tissue was covered in blood and pus.'},
      {u'Rating': 3, u'Sentence': u'They injected the steroid into his muscle.'},
      {u'Rating': 3, u'Sentence': u'He said he treated her like an object because she was stupid.'},
      {u'Rating': 3.5, u'Sentence': u'The musical closed after three disastrous performances.'}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
    Routine loadconditions
  LoopTerminator fillers
  LoopInitiator targets loopType="TrialHandler"
    conditionsFile = $blockfile
    isTrials = False
    loopType = random
    nReps = 1
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    Routine loadtargets
  LoopTerminator targets
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine pretrial
    Routine trial
  LoopTerminator trials
  Routine end
